PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'gender': "['', 'man', 'woman', 'nonbinary', 'other not listed']", 'ethnicity': "['', 'white', 'hispanic or latino/a/e', 'black or african american', 'american indian or alaska native', 'asian', 'native hawaiian or pacific islander', 'arabic or middle eastern',  'other not listed']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = LtmStm
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine start
    RoutineSettingsComponent start
      saveStartStop = False
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    TextComponent begin_experiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On the next page you will read the informed consent form. There are two pages total.

        Press the spacebar to begin.
    KeyboardComponent begin_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_trials
      Code Type = Auto->JS
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      Begin Experiment:
        #set corresponding files
        listA_file = f"participant_list/listA/{expInfo['participant']}_listA.csv"
        listB_file = f"participant_list/listB/{expInfo['participant']}_listB.csv"
        test_file  = f"participant_list/test/{expInfo['participant']}_test.csv"
        names_file = f"participant_list/names_list/{expInfo['participant']}_names_list.csv"

        import random

        if random.random() < 0.5:
            yes_key = 'left'
            no_key = 'right'
        else:
            yes_key = 'right'
            no_key = 'left'

        thisExp.addData('yes_key', yes_key)
        thisExp.addData('no_key', no_key)
  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    CodeComponent load_consent
      Code Type = Auto->JS
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      Begin Experiment:
        import glob

        consent_folder = os.path.join(_thisDir,'consent')
        consent_files = glob.glob(os.path.join(consent_folder, "*.png"))
        consent_files.sort()

        nForms = len(consent_files)
      Begin Routine:
        win.mouseVisible = True

        # Input the current form
        current_form = consent_files[consent_trials.thisN]
        consent_img.setImage(current_form)

        # Get the text to read out
        if consent_trials.thisN < (nForms - 1):
            yes_continue.setText("Next Page")
        else:
            yes_continue.setText("Yes - I agree to participate")
    ImageComponent consent_img
      size = [612/ win.size[1], 792 / win.size[1]]
      startVal [time (s)] = 0.0
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    PolygonComponent consent_cont
      fillColor = -1.0000, -1.0000, 0.0902
      lineColor = -1.0000, -1.0000, 0.0902
      pos = [0, -792 / win.size[1]/2 - .05]
      shape = rectangle
      size = (0.3, 0.10)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = $consent_cont
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent yes_continue
      letterHeight = 0.025
      pos = [0, -792 / win.size[1]/2 - .05]
      startVal [time (s)] = 0.0
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  Routine instructions
    RoutineSettingsComponent instructions
      disabled = True
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will start by seeing a set of faces and names. Then, a second set of the same names with different faces. The second set of faces flash a "back" or "next" text before the face and name are presented.

        If it says "back," think back to the face that was displayed in the first set with that name. If it says "next", learn the new face with the name.

        you will go through 4 blocks.
    TextComponent instructions_cont
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4.0
      text = press the spacebar to continue
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    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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  Routine set_block
    RoutineSettingsComponent set_block
      saveStartStop = False
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    CodeComponent blocks
      Code Type = Auto->JS
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      Begin Routine:
        #update block numbers, show block num text to participant
        currentBlock = block_loop.thisN + 1
        blockText = f"You will now begin block {currentBlock} of 4.\n\nPress the space bar to continue."
    TextComponent block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $blockText
    KeyboardComponent cont_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine listA
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    CodeComponent listA_blocks
      Code Type = Auto->JS
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      Begin Routine:
        #use corresponding block
        currentBlock = block_loop.thisN + 1
      Each Frame:
        continueRoutine = (block == currentBlock)
    TextComponent fix_crossA
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent lisA_image
      image [set every repeat] = $img_path
      size = (720/ win.size[1],576/ win.size[1])
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    TextComponent listA_name
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $name
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  Routine listB
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    CodeComponent listB_blocks
      Code Type = Auto->JS
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      Begin Routine:
        #use corresponding block
        currentBlock = block_loop.thisN + 1
      Each Frame:
        continueRoutine = (block == currentBlock)
    TextComponent fix_crossB
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent back_next_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = $back_next
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    ImageComponent listB_image
      image [set every repeat] = $img_path
      size = (720/ win.size[1],576/ win.size[1])
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
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    TextComponent listB_name
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $name
  Routine isi
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    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        #set black for participant input
        on_response = None
    TextComponent isi_test
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0.5, 1.5)
      text = +
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  Routine resp_confidence
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    ImageComponent test_image2
      image [set every repeat] = $img_path
      size = (.3, .4)
      startVal [time (s)] = 0
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    TextComponent conf_question1
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        How confident are you?
    SliderComponent confidence1
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent conf1_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent conf1_code
      Code Type = Auto->JS
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      Each Frame:
        #Cont. only allowed after answering slider and pressing continue.
        if conf1_cont.wasClicked and confidence1.getRating() is not None:
            continueRoutine = False
  Routine textbox
    RoutineSettingsComponent textbox
      skipIf = on_response != "old"
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    ImageComponent test_image3
      image [set every repeat] = $img_path
      size = (.3, .4)
      startVal [time (s)] = 0
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    TextboxComponent old_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Name?
      pos = (0, -.3)
      size = (.8, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent textbox_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.4 ,-0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    ButtonComponent textbox_idk
      bold = True
      fillColor = grey
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0, -.40)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Don't Remember
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    CodeComponent textbox_code
      Code Type = Auto->JS
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      Begin Routine:
        dont_remember_clicked = False
      Each Frame:
        ##Cont. only allowed after answering textbox and pressing continue.
        if textbox_idk.numClicks > 0 and not dont_remember_clicked:
            old_textbox.setText('idk')
            dont_remember_clicked = True

        typed_name = old_textbox.text

        if textbox_cont.wasClicked and old_textbox.text != "":
            continueRoutine = False
  Routine resp_confidence2
    RoutineSettingsComponent resp_confidence2
      skipIf = on_response != "old"
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    CodeComponent conf2_code
      Code Type = Auto->JS
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      Begin Routine:
        if typed_name == "idk" or typed_name == "":
            continueRoutine = False
      Each Frame:
        #Cont. only allowed after answering slider and pressing continue.
        if conf2_cont.wasClicked and confidence2.getRating() is not None:
            continueRoutine = False
    ImageComponent test_image4
      image [set every repeat] = $img_path
      size = (.3, .4)
      startVal [time (s)] = 0
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    TextComponent conf_question2
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        How confident are you that this name is correct?
    SliderComponent confidence2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent conf2_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating! Please go get your experimenter.

        Press the spacebar to end.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_listA
    RoutineSettingsComponent begin_listA
      saveStartStop = False
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    TextComponent ListA_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Get ready...
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  Routine begin_listB
    RoutineSettingsComponent begin_listB
      saveStartStop = False
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    TextComponent ListB_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Great! We will now show you the real trials...
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  Routine survey_instr
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    TextComponent survey_instructions
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will now see every name presented in the experiment. In the first part of the survey, you will be asked to respond how easily a person with the same name in your prersonal comes to mind. In the second part, please rate the names in the following way:

        How easily does the name come to mind? Rate the name 1-5.
        1 = "Not at all easy"
        5 = "extremely well"

        How many names come to mind? Rate the name from 1-5
        1 = 0
        2 = 1-2
        3 = 3-4
        4 = 4-5
        5 = 6+
    TextComponent survey__instructions2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, -.4)
      startVal [time (s)] = 2.0
      text = If you have questions, please ask your resercher now. If not, press the spacebar to continue
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    KeyboardComponent survey_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine survey
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    CodeComponent survey_code2
      Code Type = Auto->JS
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      Begin Routine:
        #depending on response, skip if survey_know = False, continue if survey_known is True
        continueRoutine = survey_known
        win.mouseVisible = True
      Each Frame:
        #continue button once both sliders are answered
        if HowMany_slider.getRating() is not None and HowEasy_slider.getRating() is not None:
            survey_cont.opacity = 1
            allowClick = True
        else:
            survey_cont.opacity = .3
            allowClick = False

        #Cont. if participant clicks the cont. button.
        if mouse.isPressedIn(survey_cont) and allowClick:
            continueRoutine = False
    TextComponent name_text2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name
    TextComponent name_count2
      letterHeight = 0.02
      pos = (-.7,.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_count
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    SliderComponent HowMany_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["0", "1-2", "3-4", "5-6", "6+"]
      letterHeight = 0.03
      pos = (0, 0.0)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent HowEasy_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["not at all", "", "", "", "extremely"]
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent HowEasy_test
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = How easily does someone with this name come to mind?
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    TextComponent HowMany_text
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How many people come to mind with this name?
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    ButtonComponent survey_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.75, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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  Routine pracA
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    ImageComponent pracA_image
      image = practice_trials/Original_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent pracA_name
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = beyonce
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    TextComponent pracA_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent pracA_image2
      image = practice_trials/D4cxln0-f1c9d0d2-1a40-4de5-b9fd-9551ea38a6ef.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    TextComponent pracA_name2
      letterHeight = 0.05
      pos = (0, -0.223)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
      text = jay-z
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  Routine pracB1_feedback
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    CodeComponent B1_code
      Code Type = Auto->JS
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      Begin Routine:
        B1 = ""
        #show the following feedback depending on the participants answer.
        if prac_B1 == "correct":
            B1 = "Correct! The 'back' instruction asks you to think back on the face that was previously paired with, in this case, the name Beyonce."
        elif prac_B1 == "incorrect":
            B1 = "Incorrect! The 'back' instruction asks you to think back on the face that was previously paired with, in this case, Beyonce from the first set. The name 'Beyonce' was paired with a blonde haired woman in the first set."
    TextComponent B1_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $B1
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    TextComponent B1_cont
      letterHeight = 0.05
      pos = (0,-.3)
      startVal [time (s)] = 3.0
      text = press the spacebar to continue.
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    KeyboardComponent prac_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine pracB2
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    TextComponent pracB2_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent pracB2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = next 
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    ImageComponent pracB2_image
      image = practice_trials/D6f-removebg-preview.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent pracB2_name
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = jay-z
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    TextComponent prabB2_verify
      letterHeight = 0.05
      pos = (0,.1)
      startVal [time (s)] = 6
      text = In this trial, which smiley face should you be thinking about? 
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    ImageComponent pracB2_left
      image = practice_trials/D4cxln0-f1c9d0d2-1a40-4de5-b9fd-9551ea38a6ef.jpg
      pos = (-.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ImageComponent pracB2_right
      image = practice_trials/D6f-removebg-preview.jpg
      pos = (.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ButtonComponent LeftB2_resp
      bold = True
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.03
      opacity = 0
      pos = (-.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ButtonComponent RightB2_resp
      bold = True
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      opacity = 0
      pos = (.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    CodeComponent pracB2_code
      Code Type = Auto->JS
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      Begin Routine:
        #set blank for participant input
        prac_B2 = None
      End Routine:
        #set right key as the correct answer for pracB2 trial
        if LeftB2_resp.isClicked:
            prac_B2 = "incorrect"
        elif RightB2_resp.isClicked:
            prac_B2 = "correct"
        #add to all answers if correct.
        practice_correct.append(prac_B2 == "correct")
  Routine pracB1
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    TextComponent pracB_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent pracB_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = back
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    ImageComponent pracB_image
      image = practice_trials/Black_Hair_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent pracB_name
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = beyonce
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    TextComponent pracB_verify
      letterHeight = 0.05
      pos = (0,.1)
      startVal [time (s)] = 6
      text = In this trial, which face should you be thinking about?
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    ImageComponent pracB_left
      image = practice_trials/Original_Derpina.jpg
      pos = (-.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ImageComponent pracB_right
      image = practice_trials/Black_Hair_Derpina.jpg
      pos = (.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ButtonComponent LeftB1_resp
      bold = True
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.03
      opacity = 0
      pos = (-.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    ButtonComponent RightB1_resp
      bold = True
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.03
      opacity = 0
      pos = (.2, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 6
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    CodeComponent pracB_code
      Code Type = Auto->JS
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      Begin Routine:
        #set blank for participant input
        prac_B1 = None
      End Routine:
        #set left key as the correct answer for pracB1 trial
        if LeftB1_resp.isClicked:
            prac_B1 = "correct"
        elif RightB1_resp.isClicked:
            prac_B1 = "incorrect"

        #add to all answers if correct
        practice_correct.append(prac_B1 == "correct")
  Routine pracB2_feedback
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    CodeComponent B2_code
      Code Type = Auto->JS
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      Begin Routine:
        B2 = ""
        #show the following feedback depending on the participants answer.
        if prac_B2 == "correct":
            B2= "Correct! The 'next' instruction asks you to think of this name and face pair instead of thinking back to the face of the first set with this name."
        elif prac_B2 == "incorrect":
            B2 = "Incorrect! The 'next' instruction asks you to think of this name and face pair instead of thinking back to the face of the first set that was paired with this name."
      End Routine:
        #to move on, check that there are 4 answers and that they are all correct.
        if len(practice_correct) == 2 and all(practice_correct):
            prac_loop.finished = True
        else:
            prac_loop.finished = False

        #clear for next practice trials
        practice_correct.clear()

        #set to null for next use, just in case
        prac_selected = None
    TextComponent B2_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $B2
    TextComponent B2_cont
      letterHeight = 0.05
      pos = (0,-.3)
      startVal [time (s)] = 3.0
      text = press the spacebar to continue.
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    KeyboardComponent prac_cont2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine prac1_confidence
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    ImageComponent prac_image2
      image = practice_trials/c859eac8ff5175847ec6aca0a830261a.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextComponent prac_question
      letterHeight = 0.04
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
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      text:
        How confident are you?
    SliderComponent prac_conf1
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent prac_conf1_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent prac_conf1_code
      Code Type = Auto->JS
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      Each Frame:
        #Cont. only allowed after answering the slider and pressing continue.
        if prac_conf1_cont.isClicked and prac_conf1.getRating() is not None:
            continueRoutine = False
  Routine prac1_textbox
    RoutineSettingsComponent prac1_textbox
      skipIf = prac_TestResp != "old"
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    ImageComponent prac_image3
      image = practice_trials/c859eac8ff5175847ec6aca0a830261a.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextboxComponent prac_OldTextbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Name?
      pos = (0, -.3)
      size = (.8, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent prac_TextboxCont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.4 ,-0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    ButtonComponent prac_idk_button
      bold = True
      fillColor = grey
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0, -.4)
      size = (.3, .1)
      startVal [time (s)] = 0
      text = Don't Remember
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    CodeComponent prac_TextboxCode
      Code Type = Auto->JS
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      Begin Routine:
        dont_remember_clicked = False
      Each Frame:
        #Cont. only allowed after answering textbox and pressing continue.
        if prac_idk_button.numClicks > 0 and not dont_remember_clicked:
            prac_OldTextbox.setText('idk')
            dont_remember_clicked = True

        prac_typed_name = prac_OldTextbox.text

        if prac_TextboxCont.wasClicked and prac_OldTextbox.text != "":
            continueRoutine = False
  Routine prac1_confidence2
    RoutineSettingsComponent prac1_confidence2
      skipIf = prac_TestResp != "old"
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    CodeComponent prac_conf2_code
      Code Type = Auto->JS
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      Begin Routine:
        if prac_typed_name == "idk":
            continueRoutine = False
      Each Frame:
        #Cont. only allowed after answering slider and pressing continue.
        if prac_conf2_cont.isClicked and prac_conf2.getRating() is not None:
            continueRoutine = False
      End Routine:
        prac_feedback = ""

        #show the following feedback depending on the participants answer.
        if prac_TestResp == "old":
            prac_feedback = "I am sorry, that answer is incorrect. This face was never shown"
        elif prac_TestResp == "new":
            prac_feedback = "Correct! You should not remember this face because it was not shown in the previous trials"
    ImageComponent prac_image4
      image = practice_trials/c859eac8ff5175847ec6aca0a830261a.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextComponent prac_question2
      letterHeight = 0.04
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
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      text:
        How confident are you that this name is correct?
    SliderComponent prac_conf2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent prac_conf2_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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  Routine prac1_respFeedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_feedback
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    TextComponent prac1_cont
      letterHeight = 0.05
      pos = (0,-.3)
      startVal [time (s)] = 4
      text = press the spacebar to continue.
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    KeyboardComponent prac_cont3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    CodeComponent feedback_code
      Code Type = Auto->JS
  Routine prac_test1
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    CodeComponent prac_TestCode
      Code Type = Auto->JS
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      Begin Experiment:
        if yes_key == 'left':
            left_label_text = "Yes\nLEFT "
            right_label_text = "No\nRIGHT"
        else:
            left_label_text = "No\nLEFT "
            right_label_text = "Yes\nRIGHT"
      Begin Routine:
        #set black for participant input
        prac_TestResp = None
      End Routine:
        #Log response

        if prac1_test_resp.keys == yes_key:
            prac_TestResp = 'old'
        elif prac1_test_resp.keys == no_key:
            prac_TestResp = 'new'
            prac_typed_name = ""
        thisExp.addData('prac_TestResp', prac_TestResp)


        #add to all answers if correct
        practice_test_correct.append(prac_TestResp == "new")
    TextComponent prac1_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent prac_image
      image [set every repeat] = practice_trials/c859eac8ff5175847ec6aca0a830261a.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 1
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    TextComponent prac_OldNew
      letterHeight = 0.05
      pos = (0,-.25)
      startVal [time (s)] = 1
      text = Do you remember seeing this face?
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    KeyboardComponent prac1_test_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent prac1_left_resp
      letterHeight = 0.05
      pos = (-.20, -.40)
      startVal [time (s)] = 1
      text [set every repeat] = $left_label_text
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    TextComponent prac1_right_resp
      letterHeight = 0.05
      pos = (.20, -.40)
      startVal [time (s)] = 1
      text [set every repeat] = $right_label_text
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  Routine prac2_confidence
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    ImageComponent prac2_image2
      image = practice_trials/Black_Hair_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextComponent prac2_question
      letterHeight = 0.04
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
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      text:
        How confident are you?
    SliderComponent prac2_conf1
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent prac2_conf1_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent prac2_conf1_code
      Code Type = Auto->JS
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      Each Frame:
        #Cont. only allowed after answering slider and pressing continue.
        if prac2_conf1_cont.isClicked and prac2_conf1.getRating() is not None:
            continueRoutine = False
  Routine prac2_respFeedback
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    TextComponent feedback_text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac2_feedback
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    TextComponent prac2_cont
      letterHeight = 0.05
      pos = (0,-.3)
      startVal [time (s)] = 4
      text = press the spacebar to continue.
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    KeyboardComponent prac_cont4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    CodeComponent PracEnd_code
      Code Type = Auto->JS
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      End Routine:
        #to move on, check that there are 4 answers and that they are all correct.
        if len(practice_test_correct) == 2 and all(practice_test_correct):
            prac_test_loop.finished = True
        else:
            prac_test_loop.finished = False

        #clear for next practice trials
        practice_test_correct.clear()

        #set to null for next use, just in case
        prac_selected = None
  Routine prac2_textbox
    RoutineSettingsComponent prac2_textbox
      skipIf = prac2_TestResp != "old"
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    ImageComponent prac2_image3
      image = practice_trials/Black_Hair_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextboxComponent prac2_OldTextbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Name?
      pos = (0, -.3)
      size = (.8, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent prac2_TextboxCont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.4 ,-0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    ButtonComponent prac2_idk_button
      bold = True
      fillColor = grey
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0, -.40)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Don't Remember
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    CodeComponent prac2_TextboxCode
      Code Type = Auto->JS
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      Begin Routine:
        dont_remember_clicked = False
      Each Frame:
        #Cont. only allowed after answering textbox and pressing continue.
        if prac2_idk_button.numClicks > 0 and not dont_remember_clicked:
            prac2_OldTextbox.setText('idk')
            dont_remember_clicked = True

        prac2_typed_name = prac2_OldTextbox.text

        if prac2_TextboxCont.wasClicked and prac2_OldTextbox.text != "":
            continueRoutine = False
  Routine prac2_confidence2
    RoutineSettingsComponent prac2_confidence2
      skipIf = prac2_TestResp == "new"
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    CodeComponent prac2_conf2_code
      Code Type = Auto->JS
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      Begin Routine:
        if prac2_typed_name == "idk":
            continueRoutine = False
      Each Frame:
        #Cont. only allowed after answering slider and pressing continue.
        if prac2_conf2_cont.isClicked and prac2_conf2.getRating() is not None:
            continueRoutine = False
      End Routine:
        prac2_feedback = ""

        #show the following feedback depending on the participants answer.
        if prac2_TestResp == "new":
            prac2_feedback = "I am sorry, that answer is incorrect. Recall this face being shown as paired with beyonce in the second set."
        elif prac2_TestResp == "old":
            prac2_feedback = "Good Job! That is correct. This face was paired with the name 'beyonce' in the second set"
    ImageComponent prac2_image4
      image = practice_trials/Black_Hair_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 0.0
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    TextComponent prac2_question2
      letterHeight = 0.04
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
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      text:
        How confident are you that this name is correct?
    SliderComponent prac2_conf2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["50%", "60%", "70%", "80%", "90%", "100%"]
      letterHeight = 0.05
      pos = (0, -.35)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    ButtonComponent prac2_conf2_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.7,-.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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  Routine name_display
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    CodeComponent survey_code
      Code Type = Auto->JS
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      Begin Routine:
        #set random time for isi
        random_isi = random.uniform(0.5, 1.5)

        #show the count
        current_count = f"{survey_loop.thisN + 1}/64"

        #set blank for participant input
        survey_known = None
      End Routine:
        #depending on participant answer, log resp for the name shown
        if survey_RT.keys == 'space':
            survey_known = True
        elif survey_RT.keys == ['lctrl','rctrl']:
            survey_known = False
        else:
            survey_known = False
    TextComponent survey_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random_isi
      text = +
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    TextComponent name_count
      letterHeight = 0.02
      pos = (-.7,.4)
      startVal [condition] = survey_isi.status == FINISHED
      text [set every repeat] = $current_count
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    TextComponent name_text
      letterHeight = 0.05
      startVal [condition] = survey_isi.status == FINISHED
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      text [set every repeat]:
        $name
    KeyboardComponent survey_RT
      allowedKeys = 'space','lctrl','rctrl'
      forceEndRoutine = True
      startVal [condition] = survey_isi.status == FINISHED
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    TextComponent survey_move_on
      letterHeight = 0.03
      pos = (0, -.25)
      startVal [time (s)] = 5
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      text:
        Reminder:

        Press SPACE if you know someone with that name.

        Press CTRL if you do not know anyone with that name.
  Routine distractor_dots
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    DotsComponent dots
      coherence [set every repeat] = 0.20
      dir [set every repeat] = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = different
      speed = 0.01
      startVal [time (s)] = 0.0
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    KeyboardComponent dots_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent dots_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        rdm_clock = core.Clock()
        rdm_total_duration = 30
      Begin Routine:
        # Reset the clock on the first trial
        if rdm_loop.thisN == 0:
            rdm_clock.reset()
            rdm_loop.finished = False

        # Randomize direction each trial, fixed coherence
        rdm_trial_direction = random.choice([0,180])
        rdm_trial_coherence = 0.20

        dots.dir = rdm_trial_direction
        dots.coherence = rdm_trial_coherence
      End Routine:
        correct_key = 'right' if rdm_trial_direction == 0 else 'left'
        if dots_resp.keys == correct_key:
            rdm_trial_correct = 1
        else:
            rdm_trial_correct = 0

        thisExp.addData('rdm_trial_correct', rdm_trial_correct)
        thisExp.addData('rdm_trial_direction', rdm_trial_direction)
  Routine distractor_feedback
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    TextComponent dots_feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent dots_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if rdm_trial_correct == 1:
            dots_feedback_text.text = "Correct!"
            dots_feedback_text.color = 'green'
        else:
            dots_feedback_text.text = "Incorrect"
            dots_feedback_text.color = 'red'
      End Routine:
        if rdm_clock.getTime() >= rdm_total_duration:
            rdm_loop.finished = True
  Routine listA_instrx
    RoutineSettingsComponent listA_instrx
      saveStartStop = False
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    TextComponent listA_instrx_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will see a series of faces, each paired to a name. Please pay close attention to both the faces and names, because we will later ask you questions about who you saw!
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    KeyboardComponent listA_instrx_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    TextComponent listA_instrx_cont
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 3
      text = Press the spacebar to continue.
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  Routine listB_instrx_1
    RoutineSettingsComponent listB_instrx_1
      saveStartStop = False
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    TextComponent listB_instrx_1_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will try something new. You will see faces and names again, just like before. The names are the same. But this time, they are matched with different people.
    KeyboardComponent listB_instrx_1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent listB_instrx_1_cont
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine listB_instrx_2
    RoutineSettingsComponent listB_instrx_2
      saveStartStop = False
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    TextComponent listB_instrx_2_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before each face, you will get an instruction. It tells you who to pay attention to.

        If you see 'NEXT', pay close attention to the person shown right after.

        If you see 'BACK', picture the person from before who had this same name. Focus on seeing their face in your mind.
    KeyboardComponent listB_instrx_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent listB_instrx_2_cont
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine listB_instrx_3
    RoutineSettingsComponent listB_instrx_3
      saveStartStop = False
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    TextComponent listB_instrx_3_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Imagine that you saw these two people before...
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  Routine listB_instrx_4
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    TextComponent listB_instrx_4_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, you'll see new people with the same names. Reminder:

        'Next' means pay attention to the face on the next screen.

        'Back' means picture the person from before who had this same name.
    KeyboardComponent listB_instrx_4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent listB_instrx_4_cont
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine rdm_instrx
    RoutineSettingsComponent rdm_instrx
      saveStartStop = False
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    TextComponent rdm_instrx_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you will do a new task. You will see a circle of moving dots. Most dots move randomly. But, overall, more dots move LEFT or more dots move RIGHT. Decide: do MORE dots move LEFT or RIGHT?

        -Press the LEFT arrow key for LEFT.
        -Press the RIGHT arrow key for RIGHT.

        Please answer as fast and accurately as possible. If not sure, take your best guess.
    KeyboardComponent rdm_instrx_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent rdm_instrx_cont
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine prac_setup
    RoutineSettingsComponent prac_setup
      saveStartStop = False
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    TextComponent prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_resp
      allowedKeys = 'p','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_YesNo
      Code Type = Auto->JS
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      Begin Experiment:
        practice_correct = []
        #selected 'yes' so pratice trials start at the beginning.
        prac_selected = 999
      Begin Routine:
        #begin experiment with practice trials instructions, optional after.
        if block_loop.thisN == 0:
            prac_text.setText("To make sure you understand the task, we will show you some practice trials. You must get the practice trials correct to move forward.\n\nPress the 'p' key to continue.")
        else:
            prac_text.setText("Would you like a reminder of what to do during the task? If so, press the 'p' key. If not, press the 'c' key to continue with the next block.")
      End Routine:
        #depending on participant response, log answer to continue or skip practice trials
        if 'p' in prac_resp.keys:
            prac_selected = 999
        elif 'c' in prac_resp.keys:
            prac_selected = 0
  Routine prac_test_setup
    RoutineSettingsComponent prac_test_setup
      saveStartStop = False
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    TextComponent prac_test_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_test_resp
      allowedKeys = 'p','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_test_YesNo
      Code Type = Auto->JS
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      Begin Experiment:
        practice_test_correct = []
        #selected 'yes' so pratice trials start at the beginning.
        prac_test_selected = 999
      Begin Routine:
        #begin experiment with practice trials instructions, optional after.
        if block_loop.thisN == 0:
            prac_test_txt.setText("To make sure you understand the task, we will show you some practice trials. You must get the practice trials correct to move forward.\n\nPress the 'p' key to continue.")
        else:
            prac_test_txt.setText("Would you like a reminder of what to do during the task? If so, press the 'p' key. If not, press the 'c' key to continue with the next block.")
      End Routine:
        #depending on participant response, log answer to continue or skip practice trials
        if 'p' in prac_test_resp.keys:
            prac_test_selected = 999
        elif 'c' in prac_test_resp.keys:
            prac_test_selected = 0
  Routine test_instr_1
    RoutineSettingsComponent test_instr_1
      saveStartStop = False
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    TextComponent test_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will do a memory test.

        On each trial, you will see a face. This may be a different photo of someone you saw before, at any point in the experiment. Or it may be a person you have never seen at all.
    KeyboardComponent test_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent test_continue
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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    CodeComponent test_trials
      Code Type = Auto->JS
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      Begin Routine:
        #use corresponding test trials for the block shown
        currentBlock = block_loop.thisN + 1
        block_rows = f"{(currentBlock-1)*32}:{currentBlock*32}"
  Routine test_instr_2
    RoutineSettingsComponent test_instr_2
      saveStartStop = False
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    TextComponent test_instructions_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $on_instruction_text
      wrapWidth = 1
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    KeyboardComponent test_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent test_continue_2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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    CodeComponent test_trials_2
      Code Type = Auto->JS
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      Begin Experiment:
        on_instruction_text = (
            f"The photo may look a little different. But ask yourself: did I see this person before?\n\n"
            f"If YES, press the '{yes_key.upper()}' arrow button. Then rate how sure you are. "
            f"Next, type the name that goes with the face, and rate how sure you are about that too.\n\n"
            f"If NO, press the '{no_key.upper()}' arrow button. Then rate how sure you are.\n\n"
            f"For all ratings: 50% means you are just guessing. 100% means you are completely certain"
        )
      Begin Routine:
        #use corresponding test trials for the block shown
        currentBlock = block_loop.thisN + 1
        block_rows = f"{(currentBlock-1)*32}:{currentBlock*32}"
  Routine survey_instrx_1
    RoutineSettingsComponent survey_instrx_1
      saveStartStop = False
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    TextComponent survey_instrx_1_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you will see names from the experiment, one at a time. For each name, ask yourself: do I know someone with this name? This could be someone in your life, or someone you know of (like a celebrity).

        As soon as someone with that name comes to mind, press 'SPACE' right away. Don't wait or think it over — just respond the moment someone comes to mind.

         If no one comes to mind, press 'CTRL' to move onto the next name.
    KeyboardComponent survey_instrx_1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent survey_instrx_1_cont
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine survey_instrx_2
    RoutineSettingsComponent survey_instrx_2
      saveStartStop = False
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    TextComponent survey_instrx_2_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you press 'SPACE,' you will answer two questions using the scales provided:

        1. How easily did a person come to mind?
        2. How many people with this name come to mind?

        Before we begin, you will practice with an example name. Remember: Press SPACE as soon as you think of someone with that name!
    KeyboardComponent survey_instrx_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent survey_instrx_2_cont
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine name_prac
    RoutineSettingsComponent name_prac
      saveStartStop = False
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    CodeComponent survey_prac_code
      Code Type = Auto->JS
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      Begin Routine:
        #set random time for isi
        random_isi = random.uniform(0.5, 1.5)

        #set blank for participant input
        survey_known = None
      End Routine:
        #depending on participant answer, log resp for the name shown
        if survey_prac_RT.keys == 'space':
            survey_known = True
        elif survey_prac_RT.keys == ['lctrl','rctrl']:
            survey_known = False
        else:
            survey_known = False
    TextComponent survey_prac_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random_isi
      text = +
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    TextComponent name_prac_text
      letterHeight = 0.05
      startVal [condition] = survey_prac_isi.status == FINISHED
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      text:
        Barack
    KeyboardComponent survey_prac_RT
      allowedKeys = 'space','lctrl','rctrl'
      forceEndRoutine = True
      startVal [condition] = survey_prac_isi.status == FINISHED
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    TextComponent survey_prac_moveon
      letterHeight = 0.03
      pos = (0, -.25)
      startVal [time (s)] = 5
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      text:
        Reminder:

        Press SPACE if you know someone with that name.

        Press CTRL if you do not know anyone with that name.
  Routine survey_prac
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    CodeComponent survey_prac_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #depending on response, skip if survey_know = False, continue if survey_known is True
        continueRoutine = survey_known
        win.mouseVisible = True
      Each Frame:
        #continue button once both sliders are answered
        if HowMany_prac_slider.getRating() is not None and HowEasy_prac_slider.getRating() is not None:
            survey_prac_cont.opacity = 1
            allowClick = True
        else:
            survey_prac_cont.opacity = .3
            allowClick = False

        #Cont. if participant clicks the cont. button.
        if mouse.isPressedIn(survey_prac_cont) and allowClick:
            continueRoutine = False
    TextComponent name_survey_prac
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Barack
    SliderComponent HowMany_prac_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["0", "1-2", "3-4", "5-6", "6+"]
      letterHeight = 0.03
      pos = (0, 0.0)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent HowEasy_prac_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["not at all", "", "", "", "extremely"]
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent HowEasy_prac_text
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = How easily does someone with this name come to mind?
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    TextComponent HowMany_prac_text
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How many people come to mind with this name?
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    ButtonComponent survey_prac_cont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.75, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continue
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  Routine survey_begin
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    TextComponent survey_begin_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Great! We will now begin the real survey...

        Remember: Press SPACE as soon as you think of someone with that name!
        Press CTRL if you can't think of anyone with that name.
  Routine prac_test2
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    CodeComponent prac2_TestCode
      Code Type = Auto->JS
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      Begin Experiment:
        if yes_key == 'left':
            left_label_text = "Yes\nLEFT "
            right_label_text = "No\nRIGHT"
        else:
            left_label_text = "No\nLEFT "
            right_label_text = "Yes\nRIGHT"
      Begin Routine:
        #set black for participant input
        prac_TestResp = None
      End Routine:
        #Log response

        if prac2_test_resp.keys == yes_key:
            prac2_TestResp = 'old'
        elif prac2_test_resp.keys == no_key:
            prac2_TestResp = 'new'
            prac2_typed_name = ""
        thisExp.addData('prac2_TestResp', prac2_TestResp)


        #add to all answers if correct
        practice_test_correct.append(prac2_TestResp == "old")
    TextComponent prac2_isi
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent prac2_image
      image [set every repeat] = practice_trials/Black_Hair_Derpina.jpg
      size = (357/ win.size[1],360/ win.size[1])
      startVal [time (s)] = 1
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    TextComponent prac2_OldNew
      letterHeight = 0.05
      pos = (0,-.25)
      startVal [time (s)] = 1
      text = Do you remember seeing this face?
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    KeyboardComponent prac2_test_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent prac2_left_resp
      letterHeight = 0.05
      pos = (-.20, -.40)
      startVal [time (s)] = 1
      text [set every repeat] = $left_label_text
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    TextComponent prac2_right_resp
      letterHeight = 0.05
      pos = (.20, -.40)
      startVal [time (s)] = 1
      text [set every repeat] = $right_label_text
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  Routine test
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    CodeComponent TestCode
      Code Type = Auto->JS
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      Begin Experiment:
        if yes_key == 'left':
            left_label_text = "Yes\nLEFT "
            right_label_text = "No\nRIGHT"
        else:
            left_label_text = "No\nLEFT "
            right_label_text = "Yes\nRIGHT"
      Begin Routine:
        #set black for participant input
        prac_TestResp = None
      End Routine:
        #Log response
        if test_on_resp.keys == yes_key:
            on_response = 'old'
        elif test_on_resp.keys == no_key:
            on_response = 'new'
            typed_name = ""
        thisExp.addData('on_response', on_response)
    ImageComponent test_image
      image [set every repeat] = $img_path
      size = (.3,.4)
      startVal [time (s)] = 0
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    TextComponent test_oldnew_txt
      letterHeight = 0.05
      pos = (0,-.25)
      startVal [time (s)] = 0
      text = Do you remember seeing this face?
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    KeyboardComponent test_on_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent test_left_resp
      letterHeight = 0.05
      pos = (-.20, -.40)
      startVal [time (s)] = 0
      text [set every repeat] = $left_label_text
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    TextComponent test_right_resp
      letterHeight = 0.05
      pos = (.20, -.40)
      startVal [time (s)] = 0
      text [set every repeat] = $right_label_text
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  Routine test_instr_4
    RoutineSettingsComponent test_instr_4
      saveStartStop = False
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    TextComponent test_instructions_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now see the actual trials. Please make sure to put your fingers above the left and right arrow keys before each trial.
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    KeyboardComponent test_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent test_continue_4
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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    CodeComponent test_trials_4
      Code Type = Auto->JS
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      Begin Routine:
        #use corresponding test trials for the block shown
        currentBlock = block_loop.thisN + 1
        block_rows = f"{(currentBlock-1)*32}:{currentBlock*32}"
  Routine test_instr_3
    RoutineSettingsComponent test_instr_3
      saveStartStop = False
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    TextComponent test_instructions_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = If you remember seeing the person, but don't remember their name, click the 'Don't Remember' button (the box will fill in with 'idk', short for 'I don't know'). Please do your best to remember their names though!
      wrapWidth = 1
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    KeyboardComponent test_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent test_continue_3
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
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  Routine begin_rdm
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    TextComponent begin_rdm_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Get ready! Please put your fingers on the left and right arrow keys.
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  Routine rdm_isi
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    TextComponent isi_rdm
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0.5, 1.5)
      text = +
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  Routine test_prep
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    TextComponent test_prep_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Ready?
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Flow
  Routine start
  LoopInitiator consent_trials loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nForms
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    Routine consent
  LoopTerminator consent_trials
  LoopInitiator block_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine set_block
    Routine listA_instrx
    Routine begin_listA
    LoopInitiator listA_loop loopType="TrialHandler"
      conditionsFile = $listA_file
      loopType = sequential
      nReps = 1
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      Routine listA
    LoopTerminator listA_loop
    Routine listB_instrx_1
    Routine listB_instrx_2
    Routine prac_setup
    LoopInitiator prac_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = prac_selected
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      Routine listB_instrx_3
      Routine pracA
      Routine listB_instrx_4
      Routine pracB1
      Routine pracB1_feedback
      Routine pracB2
      Routine pracB2_feedback
    LoopTerminator prac_loop
    Routine begin_listB
    LoopInitiator listB_loop loopType="TrialHandler"
      conditionsFile = $listB_file
      loopType = sequential
      nReps = 1
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      Routine listB
    LoopTerminator listB_loop
    Routine rdm_instrx
    Routine begin_rdm
    LoopInitiator rdm_loop loopType="TrialHandler"
      loopType = random
      nReps = 9999
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      Routine rdm_isi
      Routine distractor_dots
      Routine distractor_feedback
    LoopTerminator rdm_loop
    Routine test_instr_1
    Routine test_instr_2
    Routine test_instr_3
    Routine prac_test_setup
    LoopInitiator prac_test_loop loopType="TrialHandler"
      loopType = sequential
      nReps = prac_test_selected
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      Routine prac_test1
      Routine prac1_confidence
      Routine prac1_textbox
      Routine prac1_confidence2
      Routine prac1_respFeedback
      Routine prac_test2
      Routine prac2_confidence
      Routine prac2_textbox
      Routine prac2_confidence2
      Routine prac2_respFeedback
    LoopTerminator prac_test_loop
    Routine test_instr_4
    LoopInitiator test_loop loopType="TrialHandler"
      Selected rows = $block_rows
      conditionsFile = $test_file
      loopType = sequential
      nReps = 1
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      Routine test_prep
      Routine isi
      Routine test
      Routine resp_confidence
      Routine textbox
      Routine resp_confidence2
    LoopTerminator test_loop
  LoopTerminator block_loop
  Routine survey_instrx_1
  Routine survey_instrx_2
  Routine name_prac
  Routine survey_prac
  LoopInitiator survey_loop loopType="TrialHandler"
    conditionsFile = $names_file
    loopType = sequential
    nReps = 1
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    Routine name_display
    Routine survey
  LoopTerminator survey_loop
  Routine end
